## AUTHOR: Elise Emond
## AUTHOR: Ludovica Brusaferri
## Copyright (C) 2018-2019 University College London
## Licensed under the Apache License, Version 2.0
## digitiser for D690 Scanner

## For details regarding readout, see: https://opengate.readthedocs.io/en/latest/digitizer_and_detector_modeling.html#readout
/gate/digitizer/Singles/insert                        adder
/gate/digitizer/Singles/insert                        readout
/gate/digitizer/Singles/readout/setDepth              4



/gate/digitizer/Singles/insert                        blurring
/gate/digitizer/Singles/blurring/setResolution        0.124           #checked
/gate/digitizer/Singles/blurring/setEnergyOfReference 511. keV



/gate/digitizer/Singles/insert                        thresholder
/gate/digitizer/Singles/thresholder/setThreshold      425. keV     #checked
/gate/digitizer/Singles/insert                        upholder
/gate/digitizer/Singles/upholder/setUphold            650. keV     #checked


/gate/digitizer/Singles/insert timeResolution 
/gate/digitizer/Singles/timeResolution/setTimeResolution 384.76 ps #(timing resolution / sqrt(2)) - Fix to match the “coincidence time resolution” of 550 ps in STIR
